opentrons/protocol-designer 8.3.0
schemaVersion: 8
protocolName: 20250212 One pot assembly 
author: Drew Thomson
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
moduleLocationUpdate:
  temperatureModuleV2: {location: 3}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 20 µL: {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 2}
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 5}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {loadName: opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap, namespace: opentrons, version: 1, location: 8}
  Opentrons 24 Well Aluminum Block with NEST 1.5 mL Snapcap: {loadName: opentrons_24_aluminumblock_nest_1.5ml_snapcap, namespace: opentrons, version: 1, location: temperatureModuleV2}
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
  p300_single_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - pDT44 
  - pDT7
  - pDT27
  - pDT46
  - pDT47
  - pDT48
  - pDT49
  - pDT50
  - Water
  - T4 Ligase buffer 
  - T4 Ligase 
  - SapI
  - MasterMIX
ingredLocations:
  Opentrons 24 Well Aluminum Block with NEST 1.5 mL Snapcap:
    Water {volume: 500}: A1
    MasterMIX {volume: 100}: A2
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    pDT44  {volume: 30}: A1
    pDT7 {volume: 30}: A2
    pDT27 {volume: 30}: A3
    pDT46 {volume: 30}: A4
    pDT47 {volume: 30}: A5
    pDT48 {volume: 30}: A6
    pDT49 {volume: 30}: B1
    pDT50 {volume: 30}: B2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 9.2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Well Aluminum Block with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C1-C5
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 4
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Well Aluminum Block with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C1-C5
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2.4
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C1-C5
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C1-C5
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C1-C5
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C1
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A5
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C2
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A6
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C3
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B1
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C4
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B2
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  aspirate_flowRate: 3.7
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: C5
  dispense_flowRate: 3.7
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 9.2, labwareId: Opentrons 24 Well Aluminum Block with NEST 1.5 mL Snapcap, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 9.2, labwareId: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, wellName: C1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.7}
- blowout: {pipetteId: p20_single_gen2, labwareId: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, wellName: C1, flowRate: 3.78, wellLocation: {origin: top, offset: {z: 0}}}
- touchTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, wellName: C1, wellLocation: {origin: bottom, offset: {z: 36.8}}}
- moveToAddressableAreaForDropTip: {pipetteId: p20_single_gen2, addressableAreaName: fixedTrash, offset: {x: 0, y: 0, z: 0}, alternateDropLocation: true}
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